// Modified from Jess Hill
///////////////////////////////////////////////////////////////////////////////////////////
// basic macro for splitting channels, standardizing the pixel range, and max projecting //
///////////////////////////////////////////////////////////////////////////////////////////


//////////////////////////////////////////////////////
// open one image at a time and get the image name //
//////////////////////////////////////////////////////

title = getTitle();


//////////////////////////////////////////////////////////////////////
// split the channels, you have 4 channels (BF, 670, 610, hoeschet) //
//////////////////////////////////////////////////////////////////////

run("Split Channels");


/////////////////////////////////////////////////////////////////////////////////////////////////
// merge channels to make a composite image, can also remove channels at this point if desired //
/////////////////////////////////////////////////////////////////////////////////////////////////


// option A - do all 4 channels //
//run("Merge Channels...");



// option B - do only selected channels //
run("Merge Channels...", "c1=[C1-" + title + "] c3=[C3-" + title + "] c4=[C4-" + title + "] create");


//////////////////////////////////////////////////
// standardize the pixel intensity /image range //
//////////////////////////////////////////////////
 
setMinAndMax(0, 65535);


//////////////////////////////////////////////////////////////////////////////////////////////////
// Perform z projection of the middle clean z layers. Trying not to get out of focus light here //
//////////////////////////////////////////////////////////////////////////////////////////////////

run("Z Project...", "start=20 stop=40 projection=[Max Intensity]");


//////////////////////////////////////////////////////////
// added by [your name] - set scale and add scale bar   //
//////////////////////////////////////////////////////////

run("Set Scale...", "distance=25 known=1 unit=micron");
run("Scale Bar...", "width=30 height=30 thickness=20 font=80 vertical bold overlay");
